PsychoPy2experiment version="1.90.1"
Settings
  expName = Money task
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Window size (pixels) = [1280, 720]
  Screen = 1
  Monitor = testMonitor
  Units = use prefs
  logging level = debug
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        # First thing is to point Python to the path where we have installed
        # the bad and darc packages
        import sys
        sys.path.insert(0, '../..') # relative coding of 'up' two folders.


        # DESIGN GENERATOR ======================================================
        from darc.designs import Kirby2009, Frye, BAD_delayed_choices
        design_thing = BAD_delayed_choices()

        # set `max_trials` to an arbitrary high number... the design thing will
        # escape out of the trial loop when it runs out of designs, or otherwise decides
        # that we have run enough trials
        max_trials = 666

        # we start with no previous response
        last_response_chose_delayed = None

        # CREATE A MODEL ========================================================
        from darc.delayed import models
        model = models.Hyperbolic(n_particles=5_000) # was 50_000


        # USEFUL HELPER FUNCTIONS ===============================================

        def was_last_response_delayed(last_keypress):
            '''this function returns last_response_chose_delayed as True or False,
            taking into account the location of the immediate and delayed rewards.
            last_keypress is either 'left' or 'right'
            '''
            if last_keypress == 'left':
                last_response_chose_delayed = False
            elif last_keypress == 'right':
                last_response_chose_delayed = True
            else:
                error('unexpected response.keys')
            return last_response_chose_delayed


        # NOTE: Could break all these up into GET METHODS in design, and just ask for the
        # strings directly in the psychopy text item thingy. BUT that is more opaque. Maybe
        # having it out in the open and easy to adjust for people is good?

        def design_to_display_strings(design):
            # rewards -------------------------
            text_RA = f'£{design.ProspectA.reward}'
            text_RB = f'£{design.ProspectB.reward}'
            # delays --------------------------
            if design.ProspectA.delay == 0:
                text_DA = f'now'
            else:
                text_DA = f'in {design.ProspectA.delay} days'

            text_DB = f'in {design.ProspectB.delay} days'
            # probabilities -------------------
            text_PA = f'{design.ProspectA.prob*100}%'
            text_PB = f'{design.ProspectB.prob*100}%'
            return (text_RA, text_RB, text_DA, text_DB, text_PA, text_PB)
      Begin Routine:
        # DESIGN GENERATOR =================================================
        # TODO: we can probably remove `last_response_chose_delayed` as being a required
        # input here... the design_thing already has `all_data` so we can just look it up.
        # But we'd have to deal with the special case of there being no data on the first
        # trial
        # design = design_thing.get_next_design(last_response_chose_delayed)
        design = design_thing.get_next_design(model)

        # NOTE: if we want to do any adjusments to the design, we should do that here
        # to the actual design itself rather than just the text displayed to participants.
        # That way the data we output will correspond to the prospects actually shown
        # to participants.

        # If we are out of designs, then break out of the trial loop
        if design is None:
            print('Breaking out of trial loop now')
            break

        # convert the design into meaningful strings
        text_RA, text_RB, text_DA, text_DB, text_PA, text_PB = design_to_display_strings(design)
      End Routine:
        # Clear screen as soon as we press the button. Useful because the code
        # below can take time to run before things are cleared, which leads to
        # crappy responsivity
        win.flip()


        # DEAL WITH LAST RESPONSE #########################################
        last_response_chose_delayed = was_last_response_delayed(response.keys)

        design_thing.enter_trial_design_and_response(design, last_response_chose_delayed)

        model.update_beliefs(design_thing.all_data)

        # NOTE TO SELF: in theory we could be calculating updated beliefs based on both
        # possible responses *while the participant is thinking during the trial*
        # and then going with the pre-computed version once they make their
        # response. Could do this multi-threaded etc :)

        # #################################################################

        # write trial data to .csv
        trials.addData('RA', design.ProspectA.reward)
        trials.addData('DA', design.ProspectA.delay)
        trials.addData('PA', design.ProspectA.prob)

        trials.addData('RB', design.ProspectB.reward)
        trials.addData('DB', design.ProspectB.delay)
        trials.addData('PB', design.ProspectB.prob)

        if last_response_chose_delayed:
            trials.addData('R', 'B')
        else:
            trials.addData('R', 'A')
      End Experiment:
        # export parameter summary ----------------------------
        # TODO: leave like this or have as a method of `model`
        model.θ.describe().to_csv(filename+'_parameter_summary.csv')

        # export all particles, full posterior ----------------
        model.θ.to_csv(filename+'_parameter_all_particles.csv')

        # TODO: remove this, it's just handy while we develop
        print(design_thing.all_data)


        # VISUALISE POSTERIOR DISTRIBUTIONS ===============================
        # potentially have this as a method in `model`
        import matplotlib.pyplot as plt
        n_params = len(model.prior) # note, psychopy errors if we as for len(model.θ)
        fig, axes = plt.subplots(1, n_params, figsize=(9, 4), tight_layout=True)
        for (axis, key) in zip(axes, model.θ.keys()):
            axis.hist(model.θ[key], 50, normed=1, facecolor='green', alpha=0.75)
            axis.set_xlabel(key)
        plt.savefig(filename+'_parameter_plot.pdf')
    TextComponent RAitem
      startVal [time (s)] = 0
      pos = (-0.4, 0.2)
      text [set every repeat] = $text_RA
      font = Calibri
      letterHeight = 0.1
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    TextComponent DAitem
      startVal [time (s)] = 0
      pos = (-0.4, 0)
      text [set every repeat] = $text_DA
      font = Calibri
      letterHeight = 0.1
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    TextComponent PAitem
      startVal [time (s)] = 0
      pos = (-0.4, -0.2)
      text [set every repeat] = $text_PA
      font = Calibri
      letterHeight = 0.1
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    TextComponent RBitem
      startVal [time (s)] = 0
      pos = (0.4,0.2)
      text [set every repeat] = $text_RB
      font = Calibri
      letterHeight = 0.1
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    TextComponent DBitem
      startVal [time (s)] = 0
      pos = (0.4, 0)
      text [set every repeat] = $text_DB
      font = Calibri
      letterHeight = 0.1
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    TextComponent PBitem
      startVal [time (s)] = 0
      pos = (0.4, -0.2)
      text [set every repeat] = $text_PB
      font = Calibri
      letterHeight = 0.1
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    KeyboardComponent response
      startVal [time (s)] = 0.15
      allowedKeys = 'left','right'
      forceEndRoutine = True
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    TextComponent instruction_text
      startVal [time (s)] = 0.0
      pos = (0,0.8)
      text = left or right keys to chose
      letterHeight = 0.1
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  Routine bye
    TextComponent goodbye
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for taking part in science!
      letterHeight = 0.1
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  Routine instructions
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        You will be presented with choices between 2 amounts of money.
        Some will be delivered at different points in time.
        Some have a certain probability of being recieved. If not, you recieve nothing.

        Your job is to consider which you prefer and choose using the LEFT or RIGHT keys.

        There is no correct or incorrect response, please emphasise accuracy in which choice you prefer, no need to rush!

        Press SPACE to continue.
    KeyboardComponent space_press
      startVal [time (s)] = 1.0
      allowedKeys = 'space'
      store = nothing
      forceEndRoutine = True
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    nReps = 666
    loopType = sequential
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    Routine trial
  LoopTerminator trials
  Routine bye
